includeFile = WaterPhantom.txt

i:Ge/Phantom/XBins = 100
i:Ge/Phantom/YBins = 100
i:Ge/Phantom/ZBins = 100

# I'm not sure what the beam specifications should be 
s:So/XRayBeam/Type = "Beam" # Beam, Isotropic, Emittance or PhaseSpace
s:So/XRayBeam/Component = "BeamPosition"
s:So/XRayBeam/BeamParticle = "gamma"
d:So/XRayBeam/BeamEnergy = 120 keV
u:So/XRayBeam/BeamEnergySpread = 0.757504 # I don't know what this should be 
s:So/XRayBeam/BeamPositionDistribution = "Gaussian" # Flat or Gaussian
s:So/XRayBeam/BeamPositionCutoffShape = "Ellipse" # Point, Ellipse, Rectangle or Isotropic
d:So/XRayBeam/BeamPositionCutoffX = 10. cm
d:So/XRayBeam/BeamPositionCutoffY = 10. cm
d:So/XRayBeam/BeamPositionSpreadX = 0.65 cm
d:So/XRayBeam/BeamPositionSpreadY = 0.65 cm
s:So/XRayBeam/BeamAngularDistribution = "Gaussian" # Flat or Gaussian
d:So/XRayBeam/BeamAngularCutoffX = 90. deg
d:So/XRayBeam/BeamAngularCutoffY = 90. deg
d:So/XRayBeam/BeamAngularSpreadX = 0.0032 rad
d:So/XRayBeam/BeamAngularSpreadY = 0.0032 rad
i:So/XRayBeam/NumberOfHistoriesInRun = 9
i:So/XRayBeam/NumberOfHistoriesInRandomJob = 0

#i:Ts/ShowHistoryCountAtInterval = 10000
#b:Ts/ShowCPUTime = "True"

s:Sc/RealKernel1/Quantity = "EnergyDeposit"
s:Sc/RealKernel1/Component = "Phantom"

Ts/UseQt = "True"

s:Gr/ViewA/Type = "OpenGL"
b:Gr/ViewA/IncludeAxes = "True"
d:Gr/ViewA/AxesSize = 1. m

s:Sc/RealKernel1/IfOutputFileAlreadyExists = "Overwrite"

s:Tf/ActiveVRT/Function = "step"
dv:Tf/ActiveVRT/Times    = 1 13 ms
dv:Tf/ActiveVRT/Values   = 1 Ge/World/HLZ mm 

Tf/TimeLineEnd = 13 ms
Tf/NumberOfSequentialTimes = 1

b:Vr/UseVarianceReduction = "true"
s:Vr/ForcedInteraction/Type   = "ForcedInteraction"
sv:Vr/ForcedInteraction/forregion/targetregion/processesNamed   = 2 "compt" "conv"
dv:Vr/ForcedInteraction/ForRegion/targetregion/ForcedDistances  = 2 Tf/ActiveVRT/Value Tf/ActiveVRT/Value mm
b:Vr/ForcedInteraction/ForRegion/targetregion/CorrectByWeight = "True"